PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = orientation
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    ImageComponent imageFruit
      image [set every repeat] = $fruit_images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine WelcomeScreen
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment
        Press space to continue
    KeyboardComponent key_Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine blank500
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    TextComponent Blank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank500_2
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    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine GoodByeScreen
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    TextComponent textGoodBye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Good Bye!Thanks for being a part of this
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Flow
  Routine WelcomeScreen
  Routine blank500
  LoopInitiator trialsFruits loopType="TrialHandler"
    conditionsFile = Orientation/Conditions_file.xlsx
    loopType = random
    nReps = 1
    random seed = 1
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    conditions:
      [{'fruit_images': 'Orientation/images/mango.jpg'},
      {'fruit_images': 'Orientation/images/apple.jpg'},
      {'fruit_images': 'Orientation/images/litchi.jpg'}]
    Routine trial
    Routine blank500
  LoopTerminator trialsFruits
  Routine blank500_2
  Routine GoodByeScreen
